PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine first_round
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    TextboxComponent fixation
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text [set every repeat] = $'XXXX' + str(targetLetter) + 'XXX'
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('targetLetter', 'T'), ('difficulty', 'easy')]),
      OrderedDict([('targetLetter', 'L'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'L'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'L'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'T'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'T'), ('difficulty', 'hard')]),
      OrderedDict([('targetLetter', 'T'), ('difficulty', 'hard')])]
    Routine first_round
  LoopTerminator trials
